PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = lexical decision task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.6
      text [set every repeat] = $Word
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    KeyboardComponent key_resp
      allowedKeys = 'w','n'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      storeCorrect = True
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  Routine instructions
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    TextComponent inst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Greetings!

        You will presented with a bunch of words on the screen. You are required to press the "w" key if the word presented on the screen seems real to you. Similarly, you are required to press the "n" key if the word presented on the screen seems made up to you.

        Kindly press the "space" bar to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/tanvi/OneDrive/Desktop/ldt_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Word': 'Book', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'f'},
      {'Word': 'Water', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'f'},
      {'Word': 'House', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'f'},
      {'Word': 'Light', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'f'},
      {'Word': 'Day', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'f'},
      {'Word': 'School', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'f'},
      {'Word': 'Friend', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'f'},
      {'Word': 'Happy', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'f'},
      {'Word': 'World', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'f'},
      {'Word': 'Game', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'f'},
      {'Word': 'Tureen', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'nf'},
      {'Word': 'Lichen', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'nf'},
      {'Word': 'Garret', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'nf'},
      {'Word': 'Quell', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'nf'},
      {'Word': 'Fallow', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'nf'},
      {'Word': 'Mirth', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'nf'},
      {'Word': 'Placid', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'nf'},
      {'Word': 'Grove', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'nf'},
      {'Word': 'Taper', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'nf'},
      {'Word': 'Glean', 'Word_type': 'r', 'Correct': 'w', 'frequency': 'nf'},
      {'Word': 'Bliff', 'Word_type': 'pw', 'Correct': 'n', 'frequency': 'nw'}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
    Routine trial
  LoopTerminator trials
